# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: VectorMagnet

# The version string should be updated whenever changes are made to this config file
version: 0.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: VectorMagnet


[Model and options]
# The option section allow instruments with different options to use the same driver
check_option: false
option_str_1: Custom Bx magnet power supply
option_str_2: Custom By magnet power supply
option_str_3: Custom Bz magnet power supply

# Check instrument model id at startup (True or False). Default is False
check_model: False

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 5

term_char: CR

baud_rate: 9600

data_bits: 8

stop_bits: 1

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication.
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd:

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init:

# Final commands sent to the instrument when closing the driver
final:


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
# =============================================================================
# --- Custom power supplies parameters ----------------------------------------
# =============================================================================

[Power supply X axis: VISA address]
datatype: STRING
set_cmd:
get_cmd:
def_value:
group: Power supplies
option_value_1: Custom Bx magnet power supply

[Power supply X axis: Model]
datatype: COMBO
combo_def_1: Keithley 2450
set_cmd:
get_cmd:
group: Power supplies
option_value_1: Custom Bx magnet power supply

[Power supply X axis: Conversion factor (T->native)]
datatype: DOUBLE
set_cmd:
get_cmd:
group: Power supplies
option_value_1: Custom Bx magnet power supply

[Power supply X axis: Driver running]
datatype: BOOLEAN
get_cmd:
def_value: False
group: Power supplies
option_value_1: Custom Bx magnet power supply

[Power supply Y axis: VISA address]
datatype: STRING
set_cmd:
get_cmd:
def_value:
group: Power supplies
option_value_1: Custom By magnet power supply

[Power supply Y axis: Model]
datatype: COMBO
combo_def_1: Keithley 2400
set_cmd:
get_cmd:
group: Power supplies
option_value_1: Custom By magnet power supply

[Power supply Y axis: Conversion factor (T->native)]
datatype: DOUBLE
set_cmd:
get_cmd:
group: Power supplies
option_value_1: Custom By magnet power supply

[Power supply Y axis: Driver running]
datatype: BOOLEAN
get_cmd:
def_value: False
group: Power supplies
option_value_1: Custom By magnet power supply

[Power supply Z axis: VISA address]
datatype: STRING
set_cmd:
get_cmd:
def_value:
group: Power supplies
option_value_1: Custom Bz magnet power supply

[Power supply Z axis: Model]
datatype: COMBO
combo_def_1: Keithley 2400
set_cmd:
get_cmd:
group: Power supplies
option_value_1: Custom Bz magnet power supply

[Power supply Z axis: Conversion factor (T->native)]
datatype: DOUBLE
set_cmd:
get_cmd:
group: Power supplies
option_value_1: Custom Bz magnet power supply

[Power supply Z axis: Driver running]
datatype: BOOLEAN
get_cmd:
def_value: False
group: Power supplies
option_value_1: Custom Bz magnet power supply

# =============================================================================
# --- Coil constraints --------------------------------------------------------
# =============================================================================

[Max field]
datatype: DOUBLE
unit: T
def_value: 1.5
get_cmd:
set_cmd:
group: Coil parameters

[Max rate: X]
datatype: DOUBLE
unit: T/min
def_value: 0.05
get_cmd:
set_cmd:
group: Coil parameters

[Max rate: Y]
datatype: DOUBLE
unit: T/min
def_value: 0.05
get_cmd:
set_cmd:
group: Coil parameters

[Max rate: Z]
datatype: DOUBLE
unit: T/min
def_value: 0.05
get_cmd:
set_cmd:
group: Coil parameters

# =============================================================================
# --- Field values ------------------------------------------------------------
# =============================================================================

[Specification mode]
datatype: COMBO
combo_def_1: XYZ
combo_def_2: Cylindrical
combo_def_3: Spherical
set_cmd:
get_cmd:

[Field X]
datatype: DOUBLE
unit: T
get_cmd:
set_cmd:
sweep_cmd:
state_quant: Specification mode
state_value_1: XYZ

[Field Y]
datatype: DOUBLE
unit: T
get_cmd:
set_cmd:
sweep_cmd:
state_quant: Specification mode
state_value_1: XYZ

[Field Z]
datatype: DOUBLE
unit: T
get_cmd:
set_cmd:
sweep_cmd:
state_quant: Specification mode
state_value_1: XYZ
state_value_2: Cylindrical

[Field magnitude]
datatype: DOUBLE
unit: T
get_cmd:
set_cmd:
sweep_cmd:
state_quant: Specification mode
state_value_1: Spherical
state_value_2: Cylindrical

[Theta]
datatype: DOUBLE
unit: deg
get_cmd:
set_cmd:
sweep_cmd:
state_quant: Specification mode
state_value_1: Spherical
state_value_2: Cylindrical

[Phi]
datatype: DOUBLE
unit: deg
get_cmd:
set_cmd:
sweep_cmd:
state_quant: Specification mode
state_value_1: Spherical
state_value_2: Cylindrical

[Field X rate]
datatype: DOUBLE
unit: T/min
get_cmd:
set_cmd:
sweep_cmd:
state_quant: Specification mode
state_value_1: XYZ

[Field Y rate]
datatype: DOUBLE
unit: T/min
get_cmd:
set_cmd:
sweep_cmd:
state_quant: Specification mode
state_value_1: XYZ

[Field Z rate]
datatype: DOUBLE
unit: T/min
get_cmd:
set_cmd:
sweep_cmd:
state_quant: Specification mode
state_value_1: XYZ
state_value_2: Cylindrical

[Field magnitude rate]
datatype: DOUBLE
unit: T/min
get_cmd:
set_cmd:
sweep_cmd:
state_quant: Specification mode
state_value_1: Spherical
state_value_2: Cylindrical

[Theta rate]
datatype: DOUBLE
unit: deg/min
get_cmd:
set_cmd:
sweep_cmd:
state_quant: Specification mode
state_value_1: Spherical
state_value_2: Cylindrical

[Phi rate]
datatype: DOUBLE
unit: deg/min
get_cmd:
set_cmd:
sweep_cmd:
state_quant: Specification mode
state_value_1: Spherical
state_value_2: Cylindrical


# =============================================================================
# --- Hardware values ---------------------------------------------------------
# =============================================================================

[X Coil field]
datatype: DOUBLE
unit: T
get_cmd:

[Y Coil field]
datatype: DOUBLE
unit: T
get_cmd:

[Z Coil field]
datatype: DOUBLE
unit: T
get_cmd:


# =============================================================================
# --- Reference frame ---------------------------------------------------------
# =============================================================================

[Reference specification mode]
datatype: COMBO
combo_def_1: XYZ
combo_def_2: Spherical
set_cmd:
get_cmd:
group: Reference frame

[Direction x]
datatype: DOUBLE
unit: T
get_cmd:
set_cmd:
state_quant: Specification mode
state_value_1: XYZ
group: Reference frame

[Direction y]
datatype: DOUBLE
unit: T
get_cmd:
set_cmd:
state_quant: Specification mode
state_value_1: XYZ
group: Reference frame

[Direction z]
datatype: DOUBLE
unit: T
get_cmd:
set_cmd:
state_quant: Specification mode
state_value_1: XYZ
group: Reference frame

[Direction theta]
datatype: DOUBLE
unit: deg
get_cmd:
set_cmd:
state_quant: Specification mode
state_value_1: Spherical
group: Reference frame

[Direction phi]
datatype: DOUBLE
unit: deg
get_cmd:
set_cmd:
state_quant: Specification mode
state_value_1: Spherical
group: Reference frame

[Phi offset]
datatype: DOUBLE
unit: deg
get_cmd:
set_cmd:
group: Reference frame

[Bz offset]
datatype: DOUBLE
unit: deg
get_cmd:
set_cmd:
group: Reference frame
