# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Oxford Triton

# The version string should be updated whenever changes are made to this config file
version: 0.2

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: OxfordTriton


[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False


# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 5

term_char: LF

baud_rate: 9600

data_bits: 8

stop_bits: 1

tcpip_specify_port: True

tcpip_port: 33576

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication.
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd:

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init:

# Final commands sent to the instrument when closing the driver
final:


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
[MC-Cernox-Temperature]
datatype: DOUBLE
permission: READ
unit: K
get_cmd: READ:DEV:{MC Cernox}:TEMP:SIG:TEMP

[MC-RuOx-Temperature]
datatype: DOUBLE
permission: READ
unit: K
get_cmd: READ:DEV:{MC RuOx}:TEMP:SIG:TEMP

[Channel-9-Temperature]
datatype: DOUBLE
permission: READ
unit: K
get_cmd: READ:DEV:T9:TEMP:SIG:TEMP

[Channel-13-Temperature]
datatype: DOUBLE
permission: READ
unit: K
get_cmd: READ:DEV:T13:TEMP:SIG:TEMP

[Temperature closed loop - target temperature]
datatype: DOUBLE
unit: K
get_cmd: READ:DEV:T8:TEMP:LOOP:TSET
set_cmd: SET:DEV:T8:TEMP:LOOP:TSET:
group: Temperature closed loop

[Temperature closed loop - heater range]
datatype: COMBO
get_cmd: READ:DEV:T8:TEMP:LOOP:RANGE
set_cmd: SET:DEV:T8:TEMP:LOOP:RANGE:
group: Temperature closed loop
combo_def_1: Off
combo_def_2: 31.6uA
combo_def_3: 100uA
combo_def_4: 1mA
combo_def_5: 3.16mA
combo_def_6: 10.0mA
combo_def_7: 31.6mA
combo_def_8: 100mA
cmd_def_1: 0
cmd_def_2: 0.0316
cmd_def_3: 0.1
cmd_def_4: 1
cmd_def_5: 3.16
cmd_def_6: 10.0
cmd_def_7: 31.6
cmd_def_8: 100.0